PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = norm
  Window size (pixels) = (1024, 768)
  expName = Flashing_UDRL
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine setup
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    CodeComponent makeSchedule
      Code Type = Py
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      Begin Experiment:
        import numpy as np
        import pandas as pd
        import random

        # ---- load freqs from CSV ----
        freq_df = pd.read_csv('freqs_5p5_14p5.csv')  # file in same folder as .psyexp
        freq_list = [float(x) for x in freq_df['freq'].tolist()]
        assert len(freq_list) == 10, "Expected 10 freqs (6..15)."

        #BUILD PART 1
        freqs = freq_list[:]
        random.shuffle(freqs)

        left_set_p1 = freqs[:5]
        right_set_p1 = freqs[5:]

        #Randomize order within each side of part 1
        random.shuffle(left_set_p1)
        random.shuffle(right_set_p1)

        #balanced randomized cue sequence
        cue_seq_p1 = ['L'] * 5 + ['R'] * 5
        random.shuffle(cue_seq_p1)

        #Build 10 Part 1 trials
        #Maintain next uncued frequency index for each side
        #Maintain current displayed frequency for each side, which advances after cue
        l_idx = 0
        r_idx = 0
        l_disp_idx = 0
        r_disp_idx = 0

        part1 = []

        for trial_num, cue_side in enumerate(cue_seq_p1, start=1):
            #current displayed freqs
            f_left_display = left_set_p1[l_disp_idx]
            f_right_display = right_set_p1[r_disp_idx]

            if cue_side == 'L':
                cue_freq = left_set_p1[l_idx]
                cue_text = '←'
                #left target displays cued freq
                f_left_display = cue_freq
                #advance left cue pointer
                l_idx += 1
                #after cue, left frequency changes next trial
                l_disp_idx = min(l_idx, 4)
            else: #cue_side == 'R'
                cue_freq = right_set_p1[r_idx]
                cue_text = '→'
                #right target displays cued freq
                f_right_display = cue_freq
                #advance right cue pointer
                r_idx += 1
                #after cue, right frequency changes next trial
                r_disp_idx = min(r_idx, 4)

            part1.append({
                'part': 1,
                'trial_num': trial_num,
                'f_left': float(f_left_display),
                'f_right': float(f_right_display),
                'cue_side': cue_side,
                'cue_freq': float(cue_freq),
                'cue_text': cue_text
            })

        #Assertion check assert sorted([t['cue_freq'] for t in part1]) == sorted(freq_list), "Part 1 Cue Coverage Error"
        assert sum(t['cue_side'] == 'L' for t in part1) == 5
        assert sum(t['cue_side'] == 'R' for t in part1) == 5

        #BUILD PART 2
        #swap sides
        left_set_p2 = right_set_p1[:]
        right_set_p2 = left_set_p1[:]
        #randomize order
        random.shuffle(left_set_p2)
        random.shuffle(right_set_p2)
        #balanced randomized cue sequence
        cue_seq_p2 = ['L'] * 5 + ['R'] * 5
        random.shuffle(cue_seq_p2)

        #Build 10 Part 2 trials
        #Maintain next uncued frequency index for each side
        #Maintain current displayed frequency for each side, which advances after cue
        l_idx = 0
        r_idx = 0
        l_disp_idx = 0
        r_disp_idx = 0

        part2 = []

        for trial_num, cue_side in enumerate(cue_seq_p2, start=1):
            f_left_display = left_set_p2[l_disp_idx]
            f_right_display = right_set_p2[r_disp_idx]

            if cue_side == 'L':
                cue_freq = left_set_p2[l_idx]
                cue_text = '←'
                f_left_display = cue_freq

                l_idx += 1
                l_disp_idx = min(l_idx, 4)

            else: #cue_side =='R'
                cue_freq = right_set_p2[r_idx]
                cue_text = '→'
                f_right_display = cue_freq

                r_idx += 1
                r_disp_idx = min(r_idx, 4)

            part2.append({
                'part': 2,
                'trial_num': trial_num,
                'f_left': float(f_left_display),
                'f_right': float(f_right_display),
                'cue_side': cue_side,
                'cue_freq': float(cue_freq),
                'cue_text': cue_text
            })

        #Assertion checks
        # Sanity checks for Part 2 (all 10 frequencies cued exactly once)
        assert sorted([t['cue_freq'] for t in part2]) == sorted(freq_list), "Part 2 cue coverage error"
        assert sum(t['cue_side'] == 'L' for t in part2) == 5
        assert sum(t['cue_side'] == 'R' for t in part2) == 5

        all_cued = [t['cue_freq'] for t in part1] + [t['cue_freq'] for t in part2]
        for f in freq_list:
            assert all_cued.count(f) == 2, f"Frequency {f} not cued twice across parts"

        # Indices for loopP1/loopP2 access in trial routine
        thisExp.p1_i = 0
        thisExp.p2_i = 0

        #Debug print for Runner console
        print("\nPART 1")
        for r in part1:
            print(r)
        print("\nPART 2")
        for r in part2:
            print(r)
    CodeComponent socket
      Code Type = Py
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      Begin Experiment:
        import socket

        UDP_IP = "127.0.0.1"
        UDP_PORT = 1000
        udp_sock = socket.socket(socket.AF_INET, socket.SOCK_DGRAM)

        def trig_from_freq(freq_hz: float) -> int:
            # 6.0 -> 60, 13.5 -> 135, 5.5 -> 55, etc.
            return int(round(float(freq_hz) * 10))

        def send_trigger(code: int):
            # send ASCII bytes; matches earlier recorder style (b"1", b"2", etc.)
            udp_sock.sendto(str(int(code)).encode("ascii"), (UDP_IP, UDP_PORT))
      End Experiment:
        try:
            udp_sock.close()
        except Exception:
            pass
  Routine ready
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    TextComponent get_ready
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Get Ready
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  Routine trial
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    PolygonComponent rectLeft
      fillColor = white
      pos = (-0.925, 0)
      shape = rectangle
      size = (0.15, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    PolygonComponent rectRight
      fillColor = white
      pos = (0.925, 0)
      shape = rectangle
      size = (0.15, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    TextComponent text_center
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = +
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    TextComponent text_leftstop
      letterHeight = 0.25
      pos = (-0.9, 0)
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 1.0
      text = OK
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    TextComponent text_rightstop
      letterHeight = 0.25
      pos = (0.9, 0)
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 1.0
      text = OK
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    TextComponent text_rightfocus
      letterHeight = 0.05
      pos = (0.93, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      text = +
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    TextComponent text_leftfocus
      letterHeight = 0.05
      pos = (-0.93, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      text = +
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    TextComponent cueText
      letterHeight = 0.50
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $cue_text
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    CodeComponent trialLogic
      Code Type = Py
      Begin Routine:
        # Determine which loop is currently running (Part 1 vs Part 2)
        # currentLoop is set by Builder when inside a loop
        loop_name = getattr(currentLoop, 'name', '')

        if loop_name == 'loopP1':
            t = part1[thisExp.p1_i]
            thisExp.p1_i += 1
        elif loop_name == 'loopP2':
            t = part2[thisExp.p2_i]
            thisExp.p2_i += 1
        else:
            # fallback
            t = part1[thisExp.p1_i]
            thisExp.p1_i += 1

        #trial variables to be used by text + flicker
        f_left = float(t['f_left'])
        f_right = float(t['f_right'])
        cue_side = t['cue_side']
        cue_freq = float(t['cue_freq'])
        cue_text = t['cue_text']

        #trigger setup
        trigger_sent = False
        trigger_code = trig_from_freq(cue_freq)
      Each Frame:
        #send trigger
        if (not trigger_sent) and (frameN == 0):
            send_trigger(trigger_code)
            trigger_sent = True

        # Sinusoidal luminance modulation per frame
        # t is the routine time (seconds) in Builder

        aL = 0.5 * (1.0 + np.sin(2 * np.pi * f_left * t))
        aR = 0.5 * (1.0 + np.sin(2 * np.pi * f_right * t))

        # convert 0..1 -> -1..1 for rgb grayscale
        vL = 2*aL - 1
        vR = 2*aR - 1

        rectLeft.fillColor = (vL, vL, vL)
        rectLeft.lineColor = rectLeft.fillColor

        rectRight.fillColor = (vR, vR, vR)
        rectRight.lineColor = rectRight.fillColor
  Routine pause
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    TextComponent text
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      text = 15 second break
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  Routine finish
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    TextComponent text_finish
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Finish
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Flow
  Routine setup
  Routine ready
  LoopInitiator loopP1 loopType="TrialHandler"
    loopType = random
    nReps = 10
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    conditions:
      [OrderedDict([('direction', '↓')]),
      OrderedDict([('direction', '↑')]),
      OrderedDict([('direction', '→')]),
      OrderedDict([('direction', '←')])]
    Routine trial
  LoopTerminator loopP1
  Routine pause
  Routine ready
  LoopInitiator loopP2 loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine trial
  LoopTerminator loopP2
  Routine finish
