PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = norm
  Window size (pixels) = (1024, 768)
  expName = Flashing_UDRL
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine ssvep
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    PolygonComponent rectTop
      fillColor = white
      pos = (0, 0.95)
      shape = rectangle
      size = (1.0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 65
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    PolygonComponent rectBottom
      fillColor = white
      pos = (0, -0.95)
      shape = rectangle
      size = (1.0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 65
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    PolygonComponent rectLeft
      fillColor = white
      pos = (-0.925, 0)
      shape = rectangle
      size = (0.15, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 65
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    PolygonComponent rectRight
      fillColor = white
      pos = (0.925, 0)
      shape = rectangle
      size = (0.15, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 65
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    TextComponent text_up
      letterHeight = 0.25
      startVal [time (s)] = 5
      stopVal [duration (s)] = 1.0
      text = ↑
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    TextComponent text_right
      letterHeight = 0.25
      startVal [time (s)] = 20
      stopVal [duration (s)] = 1.0
      text = →
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    TextComponent text_down
      letterHeight = 0.25
      startVal [time (s)] = 35
      stopVal [duration (s)] = 1.0
      text = ↓
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    TextComponent text_left
      letterHeight = 0.25
      startVal [time (s)] = 50
      stopVal [duration (s)] = 1.0
      text = ←
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    TextComponent center
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 65
      text = +
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    CodeComponent code_flicker
      Code Type = Py
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      Begin Experiment:
        #for 60 fps, frames per cycle
        #each target ON for 50% of cycle
        flicker = {
            'rectTop': {'framesPerCycle': 4, 'color': 'white'}, #15 Hz
            'rectBottom': {'framesPerCycle': 6, 'color': 'white'}, #10 Hz
            'rectLeft': {'framesPerCycle': 8, 'color': 'white'}, #7.5 Hz
            'rectRight': {'framesPerCycle': 10, 'color': 'white'}, #6 Hz
        }
        rects = {}
      Begin Routine:
        # bind components to names
        rects['rectTop'] = rectTop
        rects['rectBottom'] = rectBottom
        rects['rectLeft'] = rectLeft
        rects['rectRight'] = rectRight
      Each Frame:
        # flicker logic
        for name, cfg in flicker.items():
            cyc = cfg['framesPerCycle']
            half = cyc // 2  # integer half cycle
            phase = frameN % cyc
            on = phase < half

            rect = rects[name]
            rect.fillColor = cfg['color'] if on else 'black'
            rect.lineColor = rect.fillColor
    TextComponent text_upstop
      letterHeight = 0.25
      pos = (0, 0.9)
      startVal [time (s)] = 15
      stopVal [duration (s)] = 1.0
      text = OK
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    TextComponent text_rightstop
      letterHeight = 0.25
      pos = (0.9, 0)
      startVal [time (s)] = 30
      stopVal [duration (s)] = 1.0
      text = OK
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    TextComponent text_downstop
      letterHeight = 0.25
      pos = (0, -0.9)
      startVal [time (s)] = 45
      stopVal [duration (s)] = 1.0
      text = OK
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    TextComponent text
      letterHeight = 0.25
      pos = (-0.9, 0)
      startVal [time (s)] = 60
      stopVal [duration (s)] = 1.0
      text = OK
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  Routine blank1s
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Flow
  Routine blank1s
  Routine ssvep
  Routine blank1s
