PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = norm
  Window size (pixels) = (1024, 768)
  expName = Flashing_UDRL
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine finish
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    TextComponent text_finish
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Finish
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  Routine ready
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    TextComponent get_ready
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Get Ready
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  Routine trial
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    PolygonComponent rectLeft
      fillColor = white
      pos = (-0.925, 0)
      shape = rectangle
      size = (0.15, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    PolygonComponent rectRight
      fillColor = white
      pos = (0.925, 0)
      shape = rectangle
      size = (0.15, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    TextComponent text_center
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = +
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    TextComponent text_leftstop
      letterHeight = 0.25
      pos = (-0.9, 0)
      startVal [time (s)] = 14.0
      stopVal [duration (s)] = 1.0
      text = OK
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    TextComponent text_rightstop
      letterHeight = 0.25
      pos = (0.9, 0)
      startVal [time (s)] = 14.0
      stopVal [duration (s)] = 1.0
      text = OK
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    TextComponent text_rightfocus
      letterHeight = 0.05
      pos = (0.93, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      text = +
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    TextComponent text_leftfocus
      letterHeight = 0.05
      pos = (-0.93, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      text = +
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    TextComponent expText
      letterHeight = 0.05
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $exp_text
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    TextComponent cueText
      letterHeight = 0.50
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $cue_text
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    CodeComponent trialLogic
      Code Type = Py
      Begin Routine:
        # Determine which loop is currently running (Part 1 vs Part 2)
        # currentLoop is set by Builder when inside a loop
        loop_name = getattr(currentLoop, 'name', '')

        if loop_name == 'loopP1':
            t = part1[thisExp.p1_i]
            thisExp.p1_i += 1
        elif loop_name == 'loopP2':
            t = part2[thisExp.p2_i]
            thisExp.p2_i += 1
        else:
            # fallback (shouldn't happen if your flow is setup -> loopP1 -> loopP2)
            t = part1[thisExp.p1_i]
            thisExp.p1_i += 1

        f_left = float(t['f_left'])
        f_right = float(t['f_right'])
        cue_side = t['cue_side']
        cue_freq = float(t['cue_freq'])
        cue_text = t['cue_text']
        exp_text = t['exp_text']
      Each Frame:
        # Sinusoidal luminance modulation per frame
        # t is the routine time (seconds) in Builder

        aL = 0.5 * (1.0 + np.sin(2 * np.pi * f_left * t))
        aR = 0.5 * (1.0 + np.sin(2 * np.pi * f_right * t))

        # convert 0..1 -> -1..1 for rgb grayscale
        vL = 2*aL - 1
        vR = 2*aR - 1

        rectLeft.fillColor = (vL, vL, vL)
        rectLeft.lineColor = rectLeft.fillColor

        rectRight.fillColor = (vR, vR, vR)
        rectRight.lineColor = rectRight.fillColor
  Routine pause
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    TextComponent text
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      text = 15 second break
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  Routine setup
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    CodeComponent makeSchedule
      Code Type = Py
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      Begin Experiment:
        import numpy as np
        import pandas as pd
        import random

        # ---- load freqs from CSV ----
        freq_df = pd.read_csv('freqs_5p5_14p5.csv')  # file in same folder as .psyexp
        freq_list = [float(x) for x in freq_df['freq'].tolist()]
        assert len(freq_list) == 10, "Expected 10 freqs (5.5..14.5)."

        # ---- build part 1 ----
        freqs = freq_list[:]
        random.shuffle(freqs)

        # pair adjacent items -> 5 pairs
        pairs = [(freqs[i], freqs[i+1]) for i in range(0, len(freqs), 2)]

        part1 = []
        for i, (a, b) in enumerate(pairs):
            # random assign which is left/right
            if random.random() < 0.5:
                f_left, f_right = a, b
            else:
                f_left, f_right = b, a

            cue_side = random.choice(['L', 'R'])
            cue_freq = f_left if cue_side == 'L' else f_right
            cue_text = '←' if cue_side == 'L' else '→'
            exp_text = f"NEXT: {cue_freq:g} Hz ({'LEFT' if cue_side=='L' else 'RIGHT'})"

            part1.append({
                'trial_id': i+1,
                'f_left': f_left,
                'f_right': f_right,
                'cue_side': cue_side,
                'cue_freq': cue_freq,
                'cue_text': cue_text,
                'exp_text': exp_text,
            })

        random.shuffle(part1)

        # ---- build part 2: swap sides from part 1; re-randomize cue side ----
        part2 = []
        for t in part1:
            f_left = t['f_right']
            f_right = t['f_left']
            cue_side = random.choice(['L', 'R'])
            cue_freq = f_left if cue_side == 'L' else f_right
            cue_text = '←' if cue_side == 'L' else '→'
            exp_text = f"NEXT: {cue_freq:g} Hz ({'LEFT' if cue_side=='L' else 'RIGHT'})"

            part2.append({
                'trial_id': t['trial_id'],
                'f_left': f_left,
                'f_right': f_right,
                'cue_side': cue_side,
                'cue_freq': cue_freq,
                'cue_text': cue_text,
                'exp_text': exp_text,
            })

        random.shuffle(part2)

        # indices used by the two loops
        thisExp.p1_i = 0
        thisExp.p2_i = 0
Flow
  Routine setup
  Routine ready
  LoopInitiator loopP1 loopType="TrialHandler"
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('direction', '↓')]),
      OrderedDict([('direction', '↑')]),
      OrderedDict([('direction', '→')]),
      OrderedDict([('direction', '←')])]
    Routine trial
  LoopTerminator loopP1
  Routine pause
  Routine ready
  LoopInitiator loopP2 loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator loopP2
  Routine finish
