PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = norm
  Window size (pixels) = (1024, 768)
  expName = Flashing_UDRL
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine finish
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    TextComponent text_finish
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Finish
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  Routine ready
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    TextComponent get_ready
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Get Ready
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  Routine trial
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    PolygonComponent rectTop
      fillColor = white
      pos = (0, 0.95)
      shape = rectangle
      size = (1.0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    PolygonComponent rectBottom
      fillColor = white
      pos = (0, -0.95)
      shape = rectangle
      size = (1.0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    PolygonComponent rectLeft
      fillColor = white
      pos = (-0.925, 0)
      shape = rectangle
      size = (0.15, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    PolygonComponent rectRight
      fillColor = white
      pos = (0.925, 0)
      shape = rectangle
      size = (0.15, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    TextComponent text_center
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = +
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    CodeComponent code_flicker
      Code Type = Py
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      Begin Experiment:
        #for 60 fps, frames per cycle
        #each target ON for 50% of cycle
        flicker = {
            'rectTop': {'framesPerCycle': 4, 'color': 'white'}, #15 Hz
            'rectBottom': {'framesPerCycle': 6, 'color': 'white'}, #10 Hz
            'rectLeft': {'framesPerCycle': 8, 'color': 'white'}, #7.5 Hz
            'rectRight': {'framesPerCycle': 10, 'color': 'white'}, #6 Hz
        }
        rects = {}
      Begin Routine:
        # bind components to names
        rects['rectTop'] = rectTop
        rects['rectBottom'] = rectBottom
        rects['rectLeft'] = rectLeft
        rects['rectRight'] = rectRight
      Each Frame:
        # flicker logic
        for name, cfg in flicker.items():
            cyc = cfg['framesPerCycle']
            half = cyc // 2  # integer half cycle
            phase = frameN % cyc
            on = phase < half

            rect = rects[name]
            rect.fillColor = cfg['color'] if on else 'black'
            rect.lineColor = rect.fillColor
    TextComponent text_cue
      letterHeight = 0.5
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $direction
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    TextComponent text_upstop
      letterHeight = 0.25
      pos = (0, 0.9)
      startVal [time (s)] = 14
      stopVal [duration (s)] = 1.0
      text = OK
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    TextComponent text_downstop
      letterHeight = 0.25
      pos = (0, -0.9)
      startVal [time (s)] = 14.0
      stopVal [duration (s)] = 1.0
      text = OK
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    TextComponent text_leftstop
      letterHeight = 0.25
      pos = (-0.9, 0)
      startVal [time (s)] = 14.0
      stopVal [duration (s)] = 1.0
      text = OK
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    TextComponent text_rightstop
      letterHeight = 0.25
      pos = (0.9, 0)
      startVal [time (s)] = 14.0
      stopVal [duration (s)] = 1.0
      text = OK
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Flow
  Routine ready
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = directions.csv
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('direction', '?')]),
      OrderedDict([('direction', '?')]),
      OrderedDict([('direction', '?')]),
      OrderedDict([('direction', '?')])]
    Routine trial
  LoopTerminator trials
  Routine finish
