PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = norm
  Window size (pixels) = (1024, 768)
  expName = Flashing_UDRL
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine finish
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    TextComponent text_finish
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Finish
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  Routine ready
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    TextComponent get_ready
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Get Ready
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  Routine trial
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    PolygonComponent rectTop
      fillColor = white
      pos = (0, 0.95)
      shape = rectangle
      size = (0.5, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    PolygonComponent rectBottom
      fillColor = white
      pos = (0, -0.95)
      shape = rectangle
      size = (0.5, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    PolygonComponent rectLeft
      fillColor = white
      pos = (-0.925, 0)
      shape = rectangle
      size = (0.15, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    PolygonComponent rectRight
      fillColor = white
      pos = (0.925, 0)
      shape = rectangle
      size = (0.15, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    TextComponent text_center
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = +
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    CodeComponent code_flicker
      Code Type = Py
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      Begin Experiment:
        import numpy as np

        # frequencies in Hz (sinusoidal luminance modulation)
        freqs_hz = {
            'rectTop': 13.5,
            'rectBottom': 12.0,
            'rectLeft': 10.0,
            'rectRight': 8.5,
        }

        rects = {}
      Begin Routine:
        rects['rectTop'] = rectTop
        rects['rectBottom'] = rectBottom
        rects['rectLeft'] = rectLeft
        rects['rectRight'] = rectRight

        # record 5 seconds worth (or entire routine)
        rec_v = {name: [] for name in freqs_hz.keys()}
        rec_t = []
      Each Frame:
        t_sec = frameN / 60.0  # assumes 60 Hz; we'll also estimate actual below

        for name, f in freqs_hz.items():
            a = 0.5 * (1.0 + np.sin(2 * np.pi * f * t_sec))  # 0..1
            v = 2*a - 1  # -1..1

            rect = rects[name]
            rect.fillColor = (v, v, v)
            rect.lineColor = rect.fillColor

            rec_v[name].append(v)
      End Routine:
        print("nFrames logged:", len(next(iter(rec_v.values()))))

        # estimate fps from PsychoPy's recorded frame intervals if available
        # (If this fails, we fall back to 60)
        fps = 60.0
        try:
            fps_est = 1.0 / np.mean(win.frameIntervals)
            if np.isfinite(fps_est) and fps_est > 1:
                fps = fps_est
        except Exception:
            pass

        print("Estimated fps:", fps)

        for name, sig in rec_v.items():
            x = np.array(sig)
            x = x - x.mean()
            freqs = np.fft.rfftfreq(len(x), d=1/fps)
            X = np.abs(np.fft.rfft(x))
            idx = np.argmax(X[1:]) + 1
            print(name, "peak at", freqs[idx], "Hz")
    TextComponent text_cue
      letterHeight = 0.5
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $direction
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    TextComponent text_upstop
      letterHeight = 0.25
      pos = (0, 0.9)
      startVal [time (s)] = 14
      stopVal [duration (s)] = 1.0
      text = OK
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    TextComponent text_downstop
      letterHeight = 0.25
      pos = (0, -0.9)
      startVal [time (s)] = 14.0
      stopVal [duration (s)] = 1.0
      text = OK
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    TextComponent text_leftstop
      letterHeight = 0.25
      pos = (-0.9, 0)
      startVal [time (s)] = 14.0
      stopVal [duration (s)] = 1.0
      text = OK
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    TextComponent text_rightstop
      letterHeight = 0.25
      pos = (0.9, 0)
      startVal [time (s)] = 14.0
      stopVal [duration (s)] = 1.0
      text = OK
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    TextComponent text_topfocus
      letterHeight = 0.05
      pos = (0, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      text = +
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    TextComponent text_bottomfocus
      letterHeight = 0.05
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      text = +
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    TextComponent text_rightfocus
      letterHeight = 0.05
      pos = (0.93, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      text = +
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    TextComponent text_leftfocus
      letterHeight = 0.05
      pos = (-0.93, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      text = +
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Flow
  Routine ready
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = directions.csv
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('direction', '?')]),
      OrderedDict([('direction', '?')]),
      OrderedDict([('direction', '?')]),
      OrderedDict([('direction', '?')])]
    Routine trial
  LoopTerminator trials
  Routine finish
