PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1024, 768]
  expName = Flashing_UDRL
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine finish
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    TextComponent text_finish
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Finish
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  Routine ready
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    TextComponent get_ready
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Get Ready
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  Routine trial
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    PolygonComponent rectTop
      fillColor = white
      pos = (0, 0.95)
      shape = rectangle
      size = (0.5, 0.35)
      startVal [time (s)] = 0.0
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    PolygonComponent rectBottom
      fillColor = white
      pos = (0, -0.95)
      shape = rectangle
      size = (0.5, 0.35)
      startVal [time (s)] = 0.0
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    PolygonComponent rectLeft
      fillColor = white
      pos = (-0.925, 0)
      shape = rectangle
      size = (0.15, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent rectRight
      fillColor = white
      pos = (0.925, 0)
      shape = rectangle
      size = (0.15, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_center
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      text = +
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    CodeComponent code_flicker
      Code Type = Py
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      Begin Experiment:
        import numpy as np

        # frequencies in Hz (sinusoidal luminance modulation)
        freqs_hz = {
            'rectTop': 13.5,
            'rectBottom': 12.0,
            'rectLeft': 10.0,
            'rectRight': 8.5,
        }

        rects = {}
      Begin Routine:
        rects['rectTop'] = rectTop
        rects['rectBottom'] = rectBottom
        rects['rectLeft'] = rectLeft
        rects['rectRight'] = rectRight

        # record 5 seconds worth (or entire routine)
        rec_v = {name: [] for name in freqs_hz.keys()}
        rec_t = []
      Each Frame:
        t_sec = frameN / 60.0  # assumes 60 Hz; we'll also estimate actual below

        for name, f in freqs_hz.items():
            a = 0.5 * (1.0 + np.sin(2 * np.pi * f * t_sec))  # 0..1
            v = 2*a - 1  # -1..1

            rect = rects[name]
            rect.fillColor = (v, v, v)
            rect.lineColor = rect.fillColor

            rec_v[name].append(v)
      End Routine:
        print("nFrames logged:", len(next(iter(rec_v.values()))))

        # estimate fps from PsychoPy's recorded frame intervals if available
        # (If this fails, we fall back to 60)
        fps = 60.0
        try:
            fps_est = 1.0 / np.mean(win.frameIntervals)
            if np.isfinite(fps_est) and fps_est > 1:
                fps = fps_est
        except Exception:
            pass

        print("Estimated fps:", fps)

        for name, sig in rec_v.items():
            x = np.array(sig)
            x = x - x.mean()
            freqs = np.fft.rfftfreq(len(x), d=1/fps)
            X = np.abs(np.fft.rfft(x))
            idx = np.argmax(X[1:]) + 1
            print(name, "peak at", freqs[idx], "Hz")
    TextComponent text_topfocus
      letterHeight = 0.05
      pos = (0, 0.9)
      startVal [time (s)] = 0.0
      text = +
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    TextComponent text_bottomfocus
      letterHeight = 0.05
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      text = +
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    TextComponent text_rightfocus
      letterHeight = 0.05
      pos = (0.93, 0)
      startVal [time (s)] = 0.0
      text = +
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    TextComponent text_leftfocus
      letterHeight = 0.05
      pos = (-0.93, 0)
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent input_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine setup
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    CodeComponent window_fullscreen_demote
      Code Type = Py
      Begin Experiment:
        import ctypes

        hwnd         = win.winHandle._hwnd
        HWND_NOTOPMOST = -2
        SWP_NOMOVE   = 0x0002
        SWP_NOSIZE   = 0x0001

        #Demote from always-on-top so other windows can overlay it
        ctypes.windll.user32.SetWindowPos(
            hwnd, HWND_NOTOPMOST, 0, 0, 0, 0,
            SWP_NOMOVE | SWP_NOSIZE
        )
    CodeComponent window_priority_high
      Code Type = Py
      Begin Experiment:
        import ctypes
        import os as _os

        kernel32 = ctypes.windll.kernel32

        #Set process to HIGH priority (safe)
        HIGH_PRIORITY_CLASS     = 0x00000080

        handle = kernel32.OpenProcess(0x1F0FFF, False, _os.getpid())
        kernel32.SetPriorityClass(handle, HIGH_PRIORITY_CLASS)
        kernel32.CloseHandle(handle)

        #Also increase Windows timer resolution to 1ms (default is ~15ms)
        #This makes Sleep() and flip timing far more precise
        winmm = ctypes.WinDLL('winmm')
        winmm.timeBeginPeriod(1)
      End Experiment:
        winmm = ctypes.WinDLL('winmm')
        winmm.timeEndPeriod(1)
Flow
  Routine setup
  Routine ready
  Routine trial
  Routine finish
